PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = article
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine article
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    ImageComponent imagequestion
      image [set every repeat] = $article_image
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent keyanswer
      allowedKeys = '1','2','3','4'
      correctAns = $check_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine beforeplaygame
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    ImageComponent imagefirst
      image = image/kumnum.png
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent keyskip2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
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    ImageComponent imageblank
      image = image/Screenshot (172).png
      size = (1.78, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine beforeplaygame
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = question_stim.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'article_image': 'image/number1.png', 'check_key': 1},
      {'article_image': 'image/number2.png', 'check_key': 2},
      {'article_image': 'image/number3.png', 'check_key': 3},
      {'article_image': 'image/number4.png', 'check_key': 3},
      {'article_image': 'image/number5.png', 'check_key': 1},
      {'article_image': 'image/number6.png', 'check_key': 1},
      {'article_image': 'image/number7.png', 'check_key': 3},
      {'article_image': 'image/number8.png', 'check_key': 3},
      {'article_image': 'image/number9.png', 'check_key': 4},
      {'article_image': 'image/number10.png', 'check_key': 4}]
    Routine article
    Routine blank
  LoopTerminator trials
